PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = goNogoAlpha1
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Routines
  Routine trial
    PolygonComponent trialBlue
      fillColor = $[-1.000,-1.000,1.000]
      lineColor = $[-1.000,-1.000,1.000]
      nVertices = 180
      opacity [set every repeat] = blueOpacity
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent trialOrange
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      nVertices = 180
      opacity [set every repeat] = orangeOpacity
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    TextComponent trialFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent trialResp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions2
    TextComponent instr2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Again, 'space' for blue, nothing for orange. 'S' to start.
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    KeyboardComponent instr2Resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
        // Math related fixes
        pi = Math.PI;
        sin = Math.sin;
        cos = Math.cos;
        sqrt = Math.sqrt;
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        taskVer = int(expInfo['taskVer'])
        if taskVer == 1:
            order = [0,1,2]
  Routine instr
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 'Space' for blue, nothing for orange. 'S' to start.
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    KeyboardComponent instrResp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if condsFile == "goNogoCond1.xlsx":
            instrText.text = "For this task, press ‘space’ for when you see the blue circle, and press nothing for the orange circle. Press ‘s’ to start."
        else:
            instrText.text = "Again, press ‘space’ for when you see the blue circle, and press nothing for the orange circle. Press ‘s’ to start."
Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    Selected rows = $order
    conditionsFile = taskCond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'goNogoCond1.xlsx')]),
      OrderedDict([('condsFile', 'goNogoCond2.xlsx')]),
      OrderedDict([('condsFile', 'goNogoCond3.xlsx')])]
    Routine instr
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trialsLoop
  LoopTerminator taskLoop
  Routine end
